# Generated by Configurator on Tue May 31 14:44:53 CEST 2016

# Reset
Property,Core,Initialize,0

# Devices
Device,COM11,SerialManager,COM11
Device,Andor Zyla 4.2,AndorSDK3,Andor sCMOS Camera
Device,Coherent Obis 405,CoherentOBIS,CoherentObis

# Pre-init settings for devices
Property,COM11,AnswerTimeout,500.0000
Property,COM11,BaudRate,57600
Property,COM11,DelayBetweenCharsMs,0.0000
Property,COM11,Handshaking,Off
Property,COM11,Parity,None
Property,COM11,StopBits,1
Property,COM11,Verbose,1
Property,Coherent Obis 405,Port,COM11

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Andor Zyla 4.2
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Obis405 Power [mW]
# Preset: NewPreset
ConfigGroup,Obis405 Power [mW],NewPreset,Coherent Obis 405,PowerSetpoint,2.7500


# Group: Obis405 On/Off
# Preset: 1
ConfigGroup,Obis405 On/Off,1,Coherent Obis 405,State,1

# Preset: 0
ConfigGroup,Obis405 On/Off,0,Coherent Obis 405,State,0



# PixelSize settings

