# Generated by Configurator on Wed Oct 19 16:54:51 CEST 2016

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM10,SerialManager,COM10
Device,COM11,SerialManager,COM11
Device,COM7,SerialManager,COM7
Device,COM3,SerialManager,COM3
Device,COM15,SerialManager,COM15
Device,Andor Zyla 4.2,AndorSDK3,Andor sCMOS Camera
Device,ESioController,ESIOImagingControllers,ESioController
Device,DAC0,ESIOImagingControllers,DAC0
Device,Analog Z-Stage,Utilities,DA Z Stage
Device,Laser: Obis 405nm,CoherentOBIS,CoherentObis
Device,pgFocus,pgFocus,pgFocus
Device,pgFocus-Stabilization,pgFocus,pgFocus-Stabilization
Device,ASI XYStage,ASIStage,XYStage
Device,DAC1,ESIOImagingControllers,DAC1
Device,DAC2,ESIOImagingControllers,DAC2
Device,Arduino-Hub,Arduino,Arduino-Hub
Device,Arduino-Switch,Arduino,Arduino-Switch
Device,Arduino-Shutter,Arduino,Arduino-Shutter
Device,MPB 642nm Laser,FreeSerialPort,FreeSerialPort

# Pre-init settings for devices
Property,ESioController,Port,COM6
Property,Analog Z-Stage,Stage High Position(um),500.0000
Property,Analog Z-Stage,Stage High Voltage,10.0000
Property,Analog Z-Stage,Stage Low Position(um),0.0000
Property,Analog Z-Stage,Stage Low Voltage,0.0000
Property,Laser: Obis 405nm,Port,COM11
Property,pgFocus,Port,COM7
Property,ASI XYStage,Port,COM3
Property,Arduino-Hub,Logic,Inverted
Property,Arduino-Hub,Port,COM15
Property,MPB 642nm Laser,Port,COM10

# Pre-init settings for COM ports
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,57600
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,0
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,9600
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,1
Property,COM11,AnswerTimeout,500.0000
Property,COM11,BaudRate,500000
Property,COM11,DelayBetweenCharsMs,0.0000
Property,COM11,Handshaking,Off
Property,COM11,Parity,None
Property,COM11,StopBits,1
Property,COM11,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,57600
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,115200
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM15,AnswerTimeout,500.0000
Property,COM15,BaudRate,57600
Property,COM15,DelayBetweenCharsMs,0.0000
Property,COM15,Handshaking,Off
Property,COM15,Parity,None
Property,COM15,StopBits,1
Property,COM15,Verbose,0

# Hub (parent) references
Parent,DAC0,ESioController
Parent,pgFocus-Stabilization,pgFocus
Parent,DAC1,ESioController
Parent,DAC2,ESioController
Parent,Arduino-Switch,Arduino-Hub
Parent,Arduino-Shutter,Arduino-Hub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,Laser: Obis 405nm,20.0

# Focus directions
FocusDirection,Analog Z-Stage,0

# Roles
Property,Core,Camera,Andor Zyla 4.2
Property,Core,Focus,Analog Z-Stage
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# Arduino-Switch
Label,Arduino-Switch,63,63
Label,Arduino-Switch,62,62
Label,Arduino-Switch,61,61
Label,Arduino-Switch,60,60
Label,Arduino-Switch,59,59
Label,Arduino-Switch,58,58
Label,Arduino-Switch,57,57
Label,Arduino-Switch,56,56
Label,Arduino-Switch,55,55
Label,Arduino-Switch,54,54
Label,Arduino-Switch,53,53
Label,Arduino-Switch,52,52
Label,Arduino-Switch,51,51
Label,Arduino-Switch,50,50
Label,Arduino-Switch,49,49
Label,Arduino-Switch,48,48
Label,Arduino-Switch,47,47
Label,Arduino-Switch,46,46
Label,Arduino-Switch,45,45
Label,Arduino-Switch,44,44
Label,Arduino-Switch,43,43
Label,Arduino-Switch,42,42
Label,Arduino-Switch,41,41
Label,Arduino-Switch,40,40
Label,Arduino-Switch,39,39
Label,Arduino-Switch,38,38
Label,Arduino-Switch,37,37
Label,Arduino-Switch,36,36
Label,Arduino-Switch,35,35
Label,Arduino-Switch,34,34
Label,Arduino-Switch,33,33
Label,Arduino-Switch,32,32
Label,Arduino-Switch,31,31
Label,Arduino-Switch,30,30
Label,Arduino-Switch,29,29
Label,Arduino-Switch,28,28
Label,Arduino-Switch,27,27
Label,Arduino-Switch,26,26
Label,Arduino-Switch,25,25
Label,Arduino-Switch,24,24
Label,Arduino-Switch,23,23
Label,Arduino-Switch,22,22
Label,Arduino-Switch,21,21
Label,Arduino-Switch,20,20
Label,Arduino-Switch,19,19
Label,Arduino-Switch,18,18
Label,Arduino-Switch,17,17
Label,Arduino-Switch,16,16
Label,Arduino-Switch,15,15
Label,Arduino-Switch,14,14
Label,Arduino-Switch,13,13
Label,Arduino-Switch,12,12
Label,Arduino-Switch,11,11
Label,Arduino-Switch,10,10
Label,Arduino-Switch,9,9
Label,Arduino-Switch,8,8
Label,Arduino-Switch,7,7
Label,Arduino-Switch,6,6
Label,Arduino-Switch,5,5
Label,Arduino-Switch,4,4
Label,Arduino-Switch,3,3
Label,Arduino-Switch,2,2
Label,Arduino-Switch,1,ND Filter Down
Label,Arduino-Switch,0,ND Filter Up

# Configuration presets
# Group: Laser: Obis 405nm Power [mW]
# Preset: NewPreset
ConfigGroup,Laser: Obis 405nm Power [mW],NewPreset,Laser: Obis 405nm,PowerSetpoint,1.0000


# Group: Camera
# Preset: Default
ConfigGroup,Camera,Default,Andor Zyla 4.2,PixelReadoutRate,540 MHz - fastest readout
ConfigGroup,Camera,Default,Andor Zyla 4.2,Sensitivity/DynamicRange,16-bit (low noise & high well capacity)
ConfigGroup,Camera,Default,Andor Zyla 4.2,SpuriousNoiseFilter,Off
ConfigGroup,Camera,Default,Andor Zyla 4.2,AuxiliaryOutSource (TTL I/O),FireAny


# Group: ND Filter
# Preset: ND Filter Up
ConfigGroup,ND Filter,ND Filter Up,Arduino-Switch,State,0
ConfigGroup,ND Filter,ND Filter Up,Arduino-Shutter,OnOff,1

# Preset: ND Filter Down
ConfigGroup,ND Filter,ND Filter Down,Arduino-Switch,State,1
ConfigGroup,ND Filter,ND Filter Down,Arduino-Shutter,OnOff,1


# Group: Channel

# Group: System
# Preset: Startup


# Group: Laser: Obis 405nm On/Off
# Preset: 1
ConfigGroup,Laser: Obis 405nm On/Off,1,Laser: Obis 405nm,State,1

# Preset: 0
ConfigGroup,Laser: Obis 405nm On/Off,0,Laser: Obis 405nm,State,0



# PixelSize settings
# Resolution preset: PentaDich-wShortpass
ConfigPixelSize,PentaDich-wShortpass,Andor Zyla 4.2,CameraFirmware,13.9.30.16
PixelSize_um,PentaDich-wShortpass,0.108
ConfigPixelSize,PentaDich-wShortpass,Andor Zyla 4.2,CameraID,VSC-01583
PixelSize_um,PentaDich-wShortpass,0.108
ConfigPixelSize,PentaDich-wShortpass,Andor Zyla 4.2,CameraModel,ZYLA-4.2-CL10
PixelSize_um,PentaDich-wShortpass,0.108
ConfigPixelSize,PentaDich-wShortpass,Andor Zyla 4.2,CameraName,Zyla 4.2 CL 10 Tap
PixelSize_um,PentaDich-wShortpass,0.108
ConfigPixelSize,PentaDich-wShortpass,Andor Zyla 4.2,CurrentSoftware,3.10.30001.0
PixelSize_um,PentaDich-wShortpass,0.108
ConfigPixelSize,PentaDich-wShortpass,Andor Zyla 4.2,Description,SDK3 Device Adapter for sCMOS cameras
PixelSize_um,PentaDich-wShortpass,0.108


