# Generated by Configurator on Tue Mar 14 12:21:53 CET 2017

# Reset
Property,Core,Initialize,0

# Devices
Device,COM9,SerialManager,COM9
Device,COM10,SerialManager,COM10
Device,COM7,SerialManager,COM7
Device,COM12,SerialManager,COM12
Device,COM8,SerialManager,COM8
Device,COM4,SerialManager,COM4
Device,Prime Camera,PVCAM,Camera-1
Device,Laser 488nm,Sapphire,Sapphire
Device,Laser 405nm,CoherentOBIS,CoherentObis
Device,ASI XYStage,ASIStage,XYStage
Device,TriggerScope-Hub,TriggerScope,TriggerScope-Hub
Device,Analog Z-Stage,TriggerScope,TriggerScope-DAC01
Device,DA Z Stage,Utilities,DA Z Stage
Device,pgFocus,pgFocus,pgFocus
Device,pgFocus-Stabilization,pgFocus,pgFocus-Stabilization
Device,ND Filter,TriggerScope,TriggerScope-TTL01
Device,Laser 561nm,Cobolt,Cobolt
Device,TriggerScope-TTL02,TriggerScope,TriggerScope-TTL02
Device,Thorlabs Shutter,Utilities,State Device Shutter

# Pre-init settings for devices
Property,COM9,AnswerTimeout,500.0000
Property,COM9,BaudRate,57600
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1
Property,COM9,Verbose,0
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,57600
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,0
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,57600
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,0
Property,COM12,AnswerTimeout,500.0000
Property,COM12,BaudRate,57600
Property,COM12,DelayBetweenCharsMs,0.0000
Property,COM12,Handshaking,Off
Property,COM12,Parity,None
Property,COM12,StopBits,1
Property,COM12,Verbose,0
Property,COM8,AnswerTimeout,500.0000
Property,COM8,BaudRate,115200
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,0
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,19200
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,0
Property,Laser 488nm,Port,COM4
Property,Laser 405nm,Port,COM9
Property,ASI XYStage,Port,COM8
Property,TriggerScope-Hub,Port,COM7
Property,DA Z Stage,Stage High Position(um),500.0000
Property,DA Z Stage,Stage High Voltage,10.0000
Property,DA Z Stage,Stage Low Position(um),0.0000
Property,DA Z Stage,Stage Low Voltage,0.0000
Property,pgFocus,Port,COM10
Property,Laser 561nm,Max Power,500.0000
Property,Laser 561nm,Port,COM12

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Analog Z-Stage,TriggerScope-Hub
Parent,pgFocus-Stabilization,pgFocus
Parent,ND Filter,TriggerScope-Hub
Parent,TriggerScope-TTL02,TriggerScope-Hub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Prime Camera
Property,Core,Shutter,Thorlabs Shutter
Property,Core,Focus,DA Z Stage
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# ND Filter
Label,ND Filter,1,Up
Label,ND Filter,0,Down
# TriggerScope-TTL02
Label,TriggerScope-TTL02,1,Open
Label,TriggerScope-TTL02,0,Closed

# Configuration presets
# Group: Prime-Centroids Enabled
# Preset: No
ConfigGroup,Prime-Centroids Enabled,No,Prime Camera,CentroidsEnabled,No

# Preset: Yes
ConfigGroup,Prime-Centroids Enabled,Yes,Prime Camera,CentroidsEnabled,Yes


# Group: Laser 561nm Power [mW]
# Preset: NewPreset
ConfigGroup,Laser 561nm Power [mW],NewPreset,Laser 561nm,PowerSetpoint,10.0000


# Group: Prime-Centroids Radius
# Preset: NewPreset
ConfigGroup,Prime-Centroids Radius,NewPreset,Prime Camera,CentroidsRadius,1


# Group: Laser 405nm On/Off
# Preset: 1
ConfigGroup,Laser 405nm On/Off,1,Laser 405nm,State,1

# Preset: 0
ConfigGroup,Laser 405nm On/Off,0,Laser 405nm,State,0


# Group: Laser 488nm On/Off
# Preset: On
ConfigGroup,Laser 488nm On/Off,On,Laser 488nm,Minimum Laser Power,5.5000
ConfigGroup,Laser 488nm On/Off,On,Laser 488nm,State,1

# Preset: Off
ConfigGroup,Laser 488nm On/Off,Off,Laser 488nm,Minimum Laser Power,5.5000
ConfigGroup,Laser 488nm On/Off,Off,Laser 488nm,State,0


# Group: Prime-Centroids Count
# Preset: NewPreset
ConfigGroup,Prime-Centroids Count,NewPreset,Prime Camera,CentroidsCount,1


# Group: Camera
# Preset: Default
ConfigGroup,Camera,Default,Prime Camera,ClearMode,Pre-Sequence
ConfigGroup,Camera,Default,Prime Camera,ExposeOutMode,First Row
ConfigGroup,Camera,Default,Prime Camera,FanSpeedSetpoint,Low
ConfigGroup,Camera,Default,Prime Camera,MetadataEnabled,Yes
ConfigGroup,Camera,Default,Prime Camera,PP  1   ENABLED,No
ConfigGroup,Camera,Default,Prime Camera,PP  2   ENABLED,No
ConfigGroup,Camera,Default,Prime Camera,PP  3   ENABLED,No
ConfigGroup,Camera,Default,Prime Camera,PP  4   ENABLED,No
ConfigGroup,Camera,Default,Prime Camera,PP  5   ENABLED,No
ConfigGroup,Camera,Default,Thorlabs Shutter,State Device,TriggerScope-TTL02


# Group: Laser 405nm Power [mW]
# Preset: NewPreset
ConfigGroup,Laser 405nm Power [mW],NewPreset,Laser 405nm,PowerSetpoint,5.0000


# Group: Laser 561nm On/Off
# Preset: On
ConfigGroup,Laser 561nm On/Off,On,Laser 561nm,Laser,On

# Preset: Off
ConfigGroup,Laser 561nm On/Off,Off,Laser 561nm,Laser,Off


# Group: Laser 488nm Power [mW]
# Preset: NewPreset
ConfigGroup,Laser 488nm Power [mW],NewPreset,Laser 488nm,PowerSetpoint,0.0000


# Group: Filter ND
# Preset: Up
ConfigGroup,Filter ND,Up,ND Filter,Label,Up

# Preset: Down
ConfigGroup,Filter ND,Down,ND Filter,Label,Down



# PixelSize settings
# Resolution preset: HT-Main Pixel Size
ConfigPixelSize,HT-Main Pixel Size,Core,Camera,Prime Camera
PixelSize_um,HT-Main Pixel Size,0.108


